PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data file delimiter = semicolon
  Data filename = u'data/%s' % (expInfo['Участник'])
  Experiment info = {'Участник': 'f"{randint(1000, 9999):03.0f}"', 'Группа': '["Группа 1", "Группа 2"]', 'Возраст': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  expName = Comprehension test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine show_text
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    TextboxComponent sentence
      alignment = center-left
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.07
      pos = (0.1, -0.1)
      size = (1.4, 2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $masked_segment
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
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    TextboxComponent introtxt
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.05
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Вам будет необходимо прочитать предложения. Они будут появляться на экране по фрагментам.
        Пока вы читаете один фрагмент, остальные будут скрыты. Чтобы скрыть текущий фрагмент и открыть следующий, нажмите ПРОБЕЛ.

        Внимательно читайте предложения. Каждый фрагмент можно прочитать только один раз. Вернуться к предыдущим фрагментам невозможно.

        Время чтения будет фиксироваться, поэтому, пожалуйста, убедитесь, что Вас ничего не будет отвлекать во время тестирования. Если Вам необходимо отвлечься, завершите чтение текущего предложения.

        После каждого предложения Вам будет необходимо оценить суждения на понимание прочитанного.
        Нажмите Y на клавиатуре, если суждение следует из предложения или просто не противоречит ему. Нажмите N, если суждение скорее противоречит предложению.

        Оценивайте суждение по отношению лишь к ТОЛЬКО ЧТО прочитанному предложению.

        Перед началом эксперимента у вас должна быть включена английская раскладка (в ином случае необходимо перезапустить).

        Эксперимент займет не более 7 минут.

        Нажмите ПРОБЕЛ, чтобы начать тестовое прочтение.
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        group1_trials_reps = 0
        group2_trials_reps = 0

        if expInfo["Группа"] == "Группа 1":
            group1_trials_reps = 1

        if expInfo["Группа"] == "Группа 2":
            group2_trials_reps = 1
  Routine end
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    TextboxComponent endtxt
      bold = True
      editable = False
      font = Georgia
      letterHeight = 0.06
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Конец тестирования.

        Благодарим за участие!
  Routine break_2
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    TextComponent fixation
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Нажмите ПРОБЕЛ для следующего предложения
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine resp_2
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine group
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Группа 2
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  Routine question
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    TextboxComponent question_2
      alignment = top-center
      anchor = bottom-center
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, 0.3)
      size = (2.6, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Ответьте на вопрос, нажав Y (ДА) или N (НЕТ)
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    TextboxComponent textbox_2
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.07
      pos = (0, 0.05)
      size = (1.7, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question_text
      units = height
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    KeyboardComponent key_resp_4
      allowedKeys = 'y', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    TextboxComponent textbox
      alignment = center-left
      anchor = center-left
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.08
      pos = (-0.5, -0.1)
      size = (1.2, 2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $masked_segment
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine question_test
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    TextboxComponent q
      alignment = top-center
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Ответьте на вопрос, нажав Y (ДА) или N (НЕТ)
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    TextboxComponent textbox_3
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.07
      pos = 0
      size = (1.5, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question_text
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine btw
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    TextboxComponent textbox_5
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.07
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Конец тестовых предложений.

        Чтобы начать эксперимент и перейти к следующему предложению, нажмите ПРОБЕЛ
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine btw2
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    TextboxComponent textbox_4
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.07
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Нажмите ПРОБЕЛ для перехода к следующему предложению
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine show_final
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    TextboxComponent textbox_7
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Нажмите Y, если ДА, или N, если НЕТ.
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    TextboxComponent textbox_6
      bold = False
      editable = False
      font = Georgia
      letterHeight = 0.05
      size = (1.5, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $idiom_question
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials_test loopType="TrialHandler"
    conditionsFile = spreadsheets/test/test_paths.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'this_file': 'spreadsheets/test/passage_0.csv'},
      {'this_file': 'spreadsheets/test/passage_1.csv'}]
    LoopInitiator sentence_loop_test loopType="TrialHandler"
      conditionsFile = $file_path
      loopType = sequential
      nReps = 1
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      Routine test
    LoopTerminator sentence_loop_test
    LoopInitiator question_loop_test loopType="TrialHandler"
      Selected rows = 0
      conditionsFile = $file_path
      loopType = sequential
      nReps = 1
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      Routine question_test
    LoopTerminator question_loop_test
    Routine btw2
  LoopTerminator trials_test
  Routine btw
  LoopInitiator group1 loopType="TrialHandler"
    loopType = random
    nReps = group1_trials_reps
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = spreadsheets/group1_paths.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'this_file': 'spreadsheets/group_1/passage_0.csv'},
        {'this_file': 'spreadsheets/group_1/passage_2.csv'},
        {'this_file': 'spreadsheets/group_1/passage_5.csv'},
        {'this_file': 'spreadsheets/group_1/passage_7.csv'},
        {'this_file': 'spreadsheets/group_1/passage_8.csv'},
        {'this_file': 'spreadsheets/group_1/passage_10.csv'},
        {'this_file': 'spreadsheets/group_1/passage_13.csv'},
        {'this_file': 'spreadsheets/group_1/passage_15.csv'},
        {'this_file': 'spreadsheets/group_1/passage_16.csv'},
        {'this_file': 'spreadsheets/group_1/passage_18.csv'},
        {'this_file': 'spreadsheets/group_1/passage_21.csv'},
        {'this_file': 'spreadsheets/group_1/passage_23.csv'},
        {'this_file': 'spreadsheets/group_1/passage_24.csv'},
        {'this_file': 'spreadsheets/group_1/passage_26.csv'},
        {'this_file': 'spreadsheets/group_1/passage_29.csv'},
        {'this_file': 'spreadsheets/group_1/passage_31.csv'},
        {'this_file': 'spreadsheets/group_1/passage_32.csv'},
        {'this_file': 'spreadsheets/group_1/passage_34.csv'},
        {'this_file': 'spreadsheets/group_1/passage_37.csv'},
        {'this_file': 'spreadsheets/group_1/passage_39.csv'}]
      LoopInitiator sentence_loop loopType="TrialHandler"
        conditionsFile = $this_file
        loopType = sequential
        nReps = 1
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        Routine show_text
      LoopTerminator sentence_loop
      LoopInitiator question_loop loopType="TrialHandler"
        Selected rows = 0
        conditionsFile = $this_file
        loopType = sequential
        nReps = 1
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        Routine question
      LoopTerminator question_loop
      Routine btw2
    LoopTerminator trials
  LoopTerminator group1
  LoopInitiator group2 loopType="TrialHandler"
    loopType = random
    nReps = group2_trials_reps
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = spreadsheets/group2_paths.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'this_file': 'spreadsheets/group_2/passage_1.csv'},
        {'this_file': 'spreadsheets/group_2/passage_3.csv'},
        {'this_file': 'spreadsheets/group_2/passage_4.csv'},
        {'this_file': 'spreadsheets/group_2/passage_6.csv'},
        {'this_file': 'spreadsheets/group_2/passage_9.csv'},
        {'this_file': 'spreadsheets/group_2/passage_11.csv'},
        {'this_file': 'spreadsheets/group_2/passage_12.csv'},
        {'this_file': 'spreadsheets/group_2/passage_14.csv'},
        {'this_file': 'spreadsheets/group_2/passage_17.csv'},
        {'this_file': 'spreadsheets/group_2/passage_19.csv'},
        {'this_file': 'spreadsheets/group_2/passage_20.csv'},
        {'this_file': 'spreadsheets/group_2/passage_22.csv'},
        {'this_file': 'spreadsheets/group_2/passage_25.csv'},
        {'this_file': 'spreadsheets/group_2/passage_27.csv'},
        {'this_file': 'spreadsheets/group_2/passage_28.csv'},
        {'this_file': 'spreadsheets/group_2/passage_30.csv'},
        {'this_file': 'spreadsheets/group_2/passage_33.csv'},
        {'this_file': 'spreadsheets/group_2/passage_35.csv'},
        {'this_file': 'spreadsheets/group_2/passage_36.csv'},
        {'this_file': 'spreadsheets/group_2/passage_38.csv'}]
      LoopInitiator sentence_loop_2 loopType="TrialHandler"
        conditionsFile = $this_file
        loopType = sequential
        nReps = 1
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        Routine show_text
      LoopTerminator sentence_loop_2
      LoopInitiator question_loop_2 loopType="TrialHandler"
        Selected rows = 0
        conditionsFile = $this_file
        loopType = sequential
        nReps = 1
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        Routine question
      LoopTerminator question_loop_2
      Routine btw2
    LoopTerminator trials_2
  LoopTerminator group2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = spreadsheets/idiom_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'idiom_question_id': 1.0, 'idiom_question': 'Вам знакомо выражение "протянуть ноги" в значении "умереть"'},
      {'idiom_question_id': 2.0, 'idiom_question': 'Вам знакомо выражение "поставить на ноги" в значении "восстановить после болезни"'},
      {'idiom_question_id': 3.0, 'idiom_question': 'Вам знакомо выражение "бить себя в грудь" в значении "клятвенно уверять кого-то в чем-либо"'},
      {'idiom_question_id': 4.0, 'idiom_question': 'Вам знакомо выражение "сдувать пылинки" в значении "бережно относиться к кому-то или чему-то"'},
      {'idiom_question_id': 5.0, 'idiom_question': 'Вам знакомо выражение "залечь на дно" в значении "скрыться, затаиться"'},
      {'idiom_question_id': 6.0, 'idiom_question': 'Вам знакомо выражение "утирать сопли" в значении "доказать свое превосходство в чем-либо перед кем-либо"'},
      {'idiom_question_id': 7.0, 'idiom_question': 'Вам знакомо выражение "взять за горло" в значении "принуждать, заставлять поступать определенным образом"'},
      {'idiom_question_id': 8.0, 'idiom_question': 'Вам знакомо выражение "сложить голову" в значении "погибнуть, пасть в бою"'},
      {'idiom_question_id': 9.0, 'idiom_question': 'Вам знакомо выражение "ворон считать" в значении "быть невнимательным, бездельничать"'},
      {'idiom_question_id': 10.0, 'idiom_question': 'Вам знакомо выражение "подставить плечо" в значении "прийти на помощь"'}]
    Routine show_final
  LoopTerminator trials_3
  Routine end
